<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="PlusServer: NDI Polaris tracker with passive markers" 
      Description="Broadcasting tool tracking data through OpenIGTLink
For NDI Polaris passive marker starting kit: Tool (8700339), Stylus (8700340), Reference (8700449)" />
    <Device
      Id="TrackerDevice"
      Type="PolarisTracker"
      SerialPort="1"
      BaudRate="115200"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Tool" PortName="0"/>
	<DataSource Type="Reference" Id="Reference" PortName="1"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Tool"/>
          <DataSource Id="Reference"/>
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualDiscCapture"
      BaseFilename="RecordingTest.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
      </InputChannels>
    </Device>    
  </DataCollection>
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="TrackerStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="ToolToTracker" />
        <Transform Name="StylusToTracker" />
        <Transform Name="ReferenceToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>