<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="Temp solution" 
      Description="Temporary solution" />
    <Device
      Id="TrackerDevice"
      Type="PolarisTracker"
      SerialPort="3"
      BaudRate="9600"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Ref" RomFile="NDI/p2_3.rom" />
	      <DataSource Type="Tool" Id="Tool1" RomFile="NDI/p1_2.rom" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Tool1"/>
          <DataSource Id="Ref"/>
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualDiscCapture"
      BaseFilename="RecordingTest.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
      </InputChannels>
    </Device>    
  </DataCollection>
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="TrackerStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="Tool1ToRef" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
</PlusConfiguration>